CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})_s(?P<Site>[0-9]{1,2})_x(?P<Row>[0-9]{1})_y(?P<Column>[0-9]{1})_Fluorescence_(?P<Channel>[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "405")
    Name to assign these images:nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:nucleoli_RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "638")
    Name to assign these images:mitochondria
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:nucleus
    Name the primary objects to be identified:nucleus
    Typical diameter of objects, in pixel units (Min,Max):45,110
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:nucleus
    Name the objects to be identified:cytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:mitochondria
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:13
    Threshold correction factor:0.65
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:cytoplasm, nucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:mitochondria, nucleoli_RNA, nucleus
    Select objects to measure:cytoplasm, nucleus

GrayToColor:[module_num:9|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:mitochondria
    Select the image to be colored green:nucleus
    Select the image to be colored blue:nucleoli_RNA
    Name the output image:Tvattbjorn_one_CellsColorized2024
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:10|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tvattbjorn_one_CellsColorized2024
    Name the output image:OverlayedOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF8A00
    Select objects to display:nucleus

MeasureImageQuality:[module_num:11|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Tvattbjorn_one_CellsColorized2024
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/test/outputfiles
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Downloads/test/outputfiles
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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